PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s_%s_cb%s-%s_s%s_r%s_e1' % (expInfo['id'], expName, expInfo['counterbalance'], expInfo['skipOther'], expInfo['session'], expInfo['run'], )
  Experiment info = {'id': '', 'counterbalance': "['A1', 'A2', 'B1', 'B2', 'C1', 'C2']", 'skipOther': '0', 'session': '1', 'run': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['audio/audio_error_ft-flanker.mp3', 'audio/audio_greatJob.mp3', 'img/left_arrow_red.png', 'img/right_arrow_red.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = arrow-alert-v0
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine JS_code
    CodeComponent JScode
      Code Type = JS
      disabled = True
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.3
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      text:
        Arrow Alert

        Welcome to the arrow alert game. In this game, arrows will be quickly flashed on the screen. Your goal is to respond to the direction of the MIDDLE arrow, and to respond as quickly as you can without making mistakes.

        If the MIDDLE arrow is pointing to the right, use your right hand to press the right button. If the MIDDLE arrow is pointing to the left, use your left hand to press the left button.
    KeyboardComponent welcome_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finishMessage
    TextComponent finishMessage_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your participation!
      wrapWidth = 1.3
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  Routine task_stimRoutine
    CodeComponent endTask_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Kia: check for endTask. If this round is observe other condition, we will skip these routines.
        if endTask:
            continueRoutine = False
            task_trial_loop.finished = True
            task_block_loop.finished = True
        # Kia: end.
    CodeComponent task_isi_code
      Code Type = Both
      Begin Experiment:
        #no need to initialize thisISI, as already done in practice code snippit
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1500, 2000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        task_trial_loop.addData('ISI', thisISI)
    ImageComponent task_centerImg
      image [set every repeat] = $middleStim
      size = (.04, .04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_rightImg1
      image [set every repeat] = $rightStim1
      pos = (.05, 0)
      size = (.04, .04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_rightImg2
      image [set every repeat] = $rightStim2
      pos = (.1, 0)
      size = (.04, .04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_leftImg1
      image [set every repeat] = $leftStim1
      pos = (-.05, 0)
      size = (.04, .04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_leftImg2
      image [set every repeat] = $leftStim1
      pos = (-.1, 0)
      size = (.04, .04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.05)
      size = (.015, .015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    CodeComponent task_stimTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if task_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 41: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x29]) #hexcode = 41; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 42:
                stimTriggerSent = True
                port.write([0x2A])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 43:
                stimTriggerSent = True
                port.write([0x2B])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 44:
                stimTriggerSent = True
                port.write([0x2C])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 51: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x33]) #hexcode = 51; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 52:
                stimTriggerSent = True
                port.write([0x34])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 53:
                stimTriggerSent = True
                port.write([0x35])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 54:
                stimTriggerSent = True
                port.write([0x36])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent task_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_respTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if task_stim_keyResp.keys and len(task_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(task_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(task_stim_keyResp.keys) < 2: #if this is  the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(task_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
      End Routine:
        #instead of including here, should instead include something
        #in each frame section that computes t at stim onset and then
        #when thisISI - t <= .05 (50 ms) and then at that point we throw
        #the no-resp marker...

        #if not prac_stim_keyResp.keys or len(prac_stim_keyResp.keys) == 0:
        #            port.write([0x63]) # 99
        #            time.sleep(PulseWidth)
        #            port.write([0x00])
    CodeComponent task_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if task_stim_keyResp.keys: #if at least one response was made this trial
            if task_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif task_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
        # Kia: following two lines of code fixes the issue of accuracy results whence there is no response.
        elif not prac_stim_keyResp.keys: # Kia: if no response was made
            accuracy = 0
        # Kia: end.
        # save this trial's accuracy to our output file
        task_trial_loop.addData('accuracy', accuracy)
  Routine prac_stimRoutine
    CodeComponent prac_isi_code
      Code Type = Both
      Begin Experiment:
        #initialize the thisISI variable
        thisISI = 0
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1500, 2000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        prac_trial_loop.addData('ISI', thisISI)


        # show in console for debugging
        #print('thisISI: ', thisISI)
    ImageComponent prac_centerImg
      image [set every repeat] = $middleStim
      size = [.04, .04]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_rightImg1
      image [set every repeat] = $rightStim1
      pos = (.05, 0)
      size = [.04, .04]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_rightImg2
      image [set every repeat] = $rightStim2
      pos = (.1, 0)
      size = [.04, .04]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_leftImg1
      image [set every repeat] = $leftStim1
      pos = (-.05, 0)
      size = [.04, .04]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_leftImg2
      image [set every repeat] = $leftStim1
      pos = (-.1, 0)
      size = (.04, .04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.05)
      size = (.015, .015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    CodeComponent prac_stimTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if prac_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 1: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x01]) #hexcode = 1; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 2:
                stimTriggerSent = True
                port.write([0x02])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 3:
                stimTriggerSent = True
                port.write([0x03])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 4:
                stimTriggerSent = True
                port.write([0x04])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent prac_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent prac_respTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if prac_stim_keyResp.keys and len(prac_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(prac_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(prac_stim_keyResp.keys) < 2: #if this is  the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(prac_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
      End Routine:
        #instead of including here, should instead include something
        #in each frame section that computes t at stim onset and then
        #when thisISI - t <= .05 (50 ms) and then at that point we throw
        #the no-resp marker...

        #if not prac_stim_keyResp.keys or len(prac_stim_keyResp.keys) == 0:
        #            port.write([0x63]) # 99
        #            time.sleep(PulseWidth)
        #            port.write([0x00])
    CodeComponent prac_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if prac_stim_keyResp.keys: #if at least one response was made this trial
            if prac_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif prac_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
        # Kia: following two lines of code fixes the issue of accuracy results whence there is no response.
        elif not prac_stim_keyResp.keys: # Kia: if no response was made
            accuracy = 0

        # save this trial's accuracy to our output file
        prac_trial_loop.addData('accuracy', accuracy)
  Routine instructMainTask
    TextComponent instructMainTask_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You will now begin the actual game.

        Experimenter: press key to continue
    KeyboardComponent instructMainTask_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine prac_blockReminders
    CodeComponent prac_initAcc_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc = 0
      Begin Routine:
        # Kia: The following 2 lines are preventing the trigger loss
        port.close()
        port.open()
        #Kia: end
    TextComponent prac_blockText
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You will now practice responding to the arrows. Remember to always respond to the direction of the MIDDLE arrow.

        Respond as quickly as you can without making mistakes. Only respond once each time you see the arrows appear.
    KeyboardComponent prac_reminder_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockReminders
    CodeComponent task_blockReminder_code
      Code Type = Auto->JS
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      Begin Routine:
        # Kia: The following 2 lines are preventing the trigger loss
        port.close()
        port.open()
        # Kia: check for endTask. If this round is observe other condition, we will skip these routines.
        if endTask:
            continueRoutine = False
            task_block_loop.finished = True
        #Kia: end
        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 10'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 10'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 10'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 10'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 10'
        elif blockCounter == 6:
            blockNumText = 'Block 6 of 10'
        elif blockCounter == 7:
            blockNumText = 'Block 7 of 10'
        elif blockCounter == 8:
            blockNumText = 'Block 8 of 10'
        elif blockCounter == 9:
            blockNumText = 'Block 9 of 10'
        elif blockCounter == 10:
            blockNumText = 'Block 10 of 10'
    TextComponent task_blockText
      color = $[-0.3,-0.3,-0.3]
      letterHeight = 0.12
      pos = (0, .14)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.8
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    TextComponent task_blockReminders_text
      letterHeight = 0.04
      pos = (0, -.19)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Remember to limit blinking to about about once every ten seconds (or less).

        Please try to relax the muscles in your face, neck, and shoulders.

        Respond as quickly as you can without making mistakes. Only respond once each time you see the arrows appear.

        Rest your right and left thumbs on the right and left buttons. When you are ready, press the right button to begin.
    KeyboardComponent task_blockReminders_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockFeed
    CodeComponent endTask_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Kia: check for endTask. If this round is observe other condition, we will skip these routines.
        if endTask:
            continueRoutine = False
            task_block_loop.finished = True
        # Kia: end.
    CodeComponent task_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockCounter < 10:
            if blockAcc >= .75:
                if blockAcc < .9:
                    blockFeed = 'Good job'
                    blockFeedCat = 1
                elif blockAcc >= .9:
                    blockFeed = 'Respond faster'
                    blockFeedCat = 2
            elif blockAcc < .75:
                blockFeed = 'Respond more accurately'
                blockFeedCat = 3
        elif blockCounter == 10:
            'You have completed all blocks'

        # save this block's feedback to our output file
        task_trial_loop.addData('blockFeedCat', blockFeedCat)

        #reset the following variables to zero before next block starts
        trialNum = 0
        numCorr = 0
    TextComponent task_blockFeed_text
      color = $[-0.3,-0.3,-0.3]
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockFeed
      wrapWidth = 1.8
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    TextComponent task_blackFeed_text3
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Please wait
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    TextComponent task_blockFeed_text2
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 10
      text [set every repeat] = Press the right button to continue
      wrapWidth = 1.3
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    KeyboardComponent task_blockFeed_keyResp
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine prac_blockFeed
    CodeComponent prac_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockAcc >= .75: #if accuracy >= 75% then say practice is complete and end practice loop to continue to main exp
            outPut = 'You will now play the real game' #feedback presented
            prac_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc <= .75: #if accuracy < 75% then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again' #feedback presented
            prac_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        #reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
    TextComponent prac_blockFeed_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Experimenter: press key to continue
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initFixation
    CodeComponent endTask_code
      Code Type = Auto->JS
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      Begin Routine:
        # check for endTask. If this round is observe other condition, we will skip these routines.
        if endTask:
            continueRoutine = False
            task_block_loop.finished = True
    ImageComponent initFixation_img
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.05)
      size = (.015, .015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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  Routine instructRight
    TextComponent instructRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.
    ImageComponent instructRight_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg1
      image = img/rightArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg2
      image = img/rightArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg1
      image = img/rightArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg2
      image = img/rightArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructRight_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconRight
    TextComponent instructInconRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Sometimes the MIDDLE arrow will point in a different direction from the other arrows. However, your goal is to always respond based on the direction of the MIDDLE arrow.

        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.
    ImageComponent instructIncon_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg1
      image = img/leftArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg2
      image = img/leftArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg1
      image = img/leftArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconRight_leftImg2
      image = img/leftArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructInconRight_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructLeft
    TextComponent instructLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.
    ImageComponent instructLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg1
      image = img/leftArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg2
      image = img/leftArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg1
      image = img/leftArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg2
      image = img/leftArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructLeft_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconLeft
    TextComponent instructInconLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.
    ImageComponent instructInconLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg1
      image = img/rightArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg2
      image = img/rightArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg1
      image = img/rightArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg2
      image = img/rightArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructInconLeft_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        import serial #used for sending eeg triggers
        import time #indirerctly used for sending eeg triggers (how long to wait before clearing port)

        win.mouseVisible = False #hide mouse cursor
        #Kia: I had to change COM3 to COM4 as it is the port name on Egret and Heron PCs.
        port = serial.Serial('COM4') # open specified port (COM3) for sending eeg triggers to
        # Kia: The following 2 lines are preventing the trigger loss
        port.close()
        port.open()
        # Kia: end
        PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)

        port.write([0x00]) #clear serial port
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        port.write([0xFF]) #set port values back to default state (FF)
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        port.close() #close port opened at start of exp
  Routine task_condition
    CodeComponent condition_init_blockCounter
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of the condition
        blockCounter = 0

        # To skip routines in case of "observe other",
        # we will need to use endTask.
        # see begin routine tab for more.
        endTask = 0
        #Kia: end
      Begin Routine:
        #reset the following variables at the start of the experiment
        blockCounter = 0

        # Kia
        if conditionText == 'Observe other':
            endTask == 1 # will skip this round of the block
            if expInfo['skipOther'] == '1':
                continueRoutine = False
        elif conditionText == 'Observed':
            endTask = 0 # will not skip this round of the block. So, participant will play the task.
        elif conditionText == 'Alone':
            endTask = 0 # will not skip this round of the block. So, participant will play the task.

        #Kia: end
    TextComponent condition_whichCondition_text
      color = $[-0.3,-0.3,-0.3]
      letterHeight = 0.22
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $conditionText
      wrapWidth = 1.8
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    TextComponent condition_reminder_text
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experimenter: provide instructions and then press key to continue
      wrapWidth = 1.8
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    KeyboardComponent condition_keyResp
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine task_conditionComplete
    TextComponent conditionComplete_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please ring bell and wait for experimenter to continue
      wrapWidth = 1.3
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    KeyboardComponent conditionComplete_key_resp
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine welcome2
    TextComponent welcome_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.3
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      text:
        Arrow Alert

        Welcome to the arrow alert game. In this game, arrows will be quickly flashed on the screen. Your goal is to respond to the direction of the MIDDLE arrow, and to respond as quickly as you can without making mistakes.

        If the MIDDLE arrow is pointing to the right, use your right hand to press the right button. If the MIDDLE arrow is pointing to the left, use your left hand to press the left button.

        Press the right button to continue
    KeyboardComponent welcome_keyResp_2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructRight_2
    TextComponent instructRight_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.

        Press the right button to continue
    ImageComponent instructRight_centerImg_2
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg1_2
      image = img/rightArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg2_2
      image = img/rightArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg1_2
      image = img/rightArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg2_2
      image = img/rightArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructRight_keyResp_2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructLeft_2
    TextComponent instructLeft_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.

        Press the left button to continue
    ImageComponent instructLeft_centerImg_2
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg1_2
      image = img/leftArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg2_2
      image = img/leftArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg1_2
      image = img/leftArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg2_2
      image = img/leftArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructLeft_keyResp_2
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconRight_2
    TextComponent instructInconRight_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Sometimes the MIDDLE arrow will point in a different direction from the other arrows. However, your goal is to always respond based on the direction of the MIDDLE arrow.

        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.

        Press the right button to continue
    ImageComponent instructIncon_centerImg_2
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg1_2
      image = img/leftArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg2_2
      image = img/leftArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg1_2
      image = img/leftArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconRight_leftImg2_2
      image = img/leftArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructInconRight_keyResp_2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconLeft_2
    TextComponent instructInconLeft_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.

        Press the left button to continue
    ImageComponent instructInconLeft_centerImg_2
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg1_2
      image = img/rightArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg2_2
      image = img/rightArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg1_2
      image = img/rightArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg2_2
      image = img/rightArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructInconLeft_keyResp_2
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prac_blockReminders_2
    CodeComponent prac_initAcc_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc = 0
    TextComponent prac_blockText_2
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You will now practice responding to the arrows. Remember to always respond to the direction of the MIDDLE arrow.

        Respond as quickly as you can without making mistakes. Only respond once each time you see the arrows appear.

        To get ready, rest your right and left thumbs on the right and left buttons, then press the right button when you are ready to begin.
    KeyboardComponent prac_reminder_keyResp_2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine oberve_other
    CodeComponent observe_other_code
      Code Type = Auto->JS
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      Begin Routine:
        if conditionText == 'Observe other':
            task_trial_loop.finished = True
            task_block_loop.finished = True
  Routine logo
    ImageComponent logo_image
      image = img/logo2.png
      size = (1,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent logo_resp
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine respond_onceInstruct
    TextComponent respond_once_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Each time you see the arrows appear, respond as quickly as you can without making mistakes.

        However, only respond once each time you see the arrows appear. Even if you think you made the wrong response, do not respond again until you see the next set of arrows appear.
    KeyboardComponent respond_once_key_resp1
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine respond_onceInstruct_2
    TextComponent respond_once_text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Each time you see the arrows appear, respond as quickly as you can without making mistakes.

        However, only respond once each time you see the arrows appear. Even if you think you made the wrong response, do not respond again until you see the next set of arrows appear.

        Press the right button to continue
    KeyboardComponent respond_once_key_resp1_2
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine JS_code
  Routine setup
  Routine logo
  Routine welcome
  Routine welcome2
  Routine instructRight
  Routine instructRight_2
  Routine instructLeft
  Routine instructLeft_2
  Routine instructInconRight
  Routine instructInconRight_2
  Routine instructInconLeft
  Routine instructInconLeft_2
  Routine respond_onceInstruct
  Routine respond_onceInstruct_2
  LoopInitiator prac_block_loop loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine prac_blockReminders
    Routine prac_blockReminders_2
    Routine initFixation
    LoopInitiator prac_trial_loop loopType="TrialHandler"
      conditionsFile = prac_trials.xlsx
      loopType = random
      nReps = 10
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      conditions:
        [{'middleStim': 'img/rightArrow.png', 'rightStim1': 'img/rightArrow.png', 'rightStim2': 'img/rightArrow.png', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 5, 'congruent': 1, 'target': 'right'},
        {'middleStim': 'img/leftArrow.png', 'rightStim1': 'img/leftArrow.png', 'rightStim2': 'img/leftArrow.png', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 6, 'congruent': 1, 'target': 'left'},
        {'middleStim': 'img/rightArrow.png', 'rightStim1': 'img/leftArrow.png', 'rightStim2': 'img/leftArrow.png', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 7, 'congruent': 0, 'target': 'right'},
        {'middleStim': 'img/leftArrow.png', 'rightStim1': 'img/rightArrow.png', 'rightStim2': 'img/rightArrow.png', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 8, 'congruent': 0, 'target': 'left'}]
      Routine prac_stimRoutine
    LoopTerminator prac_trial_loop
    Routine prac_blockFeed
  LoopTerminator prac_block_loop
  LoopInitiator task_condition_loop loopType="TrialHandler"
    conditionsFile = $"condition_"+expInfo['counterbalance']+".xlsx"
    loopType = sequential
    nReps = 1
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    Routine task_condition
    LoopInitiator task_block_loop loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine task_blockReminders
      Routine initFixation
      LoopInitiator task_trial_loop loopType="TrialHandler"
        conditionsFile = $whichCondition
        loopType = random
        nReps = 10
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        Routine task_stimRoutine
      LoopTerminator task_trial_loop
      Routine task_blockFeed
    LoopTerminator task_block_loop
    Routine task_conditionComplete
  LoopTerminator task_condition_loop
