PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s_%s_psychopy_s%s_r%s_e1' % (expInfo['id'], expName, expInfo['session'], expInfo['run'], )
  Experiment info = {'id': '', 'counterbalance': "['A1', 'A2', 'B1', 'B2', 'C1', 'C2']", 'skipOther': '0', 'session': '1', 'run': '1'}
  Full-screen window = True
  Monitor = sys-1-asus
  Resources = ['audio/audio_error_ft-flanker.mp3', 'audio/audio_greatJob.mp3', 'img/left_arrow_red.png', 'img/right_arrow_red.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = arrow-alert-v1-2
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine JS_code
    CodeComponent JScode
      Code Type = JS
      disabled = True
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine welcome
    KeyboardComponent welcome_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $welcome_keyResp.keys
      store = nothing
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    KeyboardComponent welcome_keyResp2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $welcome_keyResp.keys
      store = nothing
      syncScreenRefresh = False
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    TextComponent welcome_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.3
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      text [set every repeat]:
        Arrow Alert

        Welcome to the Arrow Alert game. In this game, arrows will be quickly flashed on the screen. Your goal is to respond to the direction of the arrows, and to respond as quickly as you can without making mistakes.
    TextComponent welcome_text2
      letterHeight = 0.04
      startVal [condition] = $welcome_keyResp.keys
      wrapWidth = 1.3
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      text [set every repeat]:
        Arrow Alert

        Welcome to the Arrow Alert game. In this game, arrows will be quickly flashed on the screen. Your goal is to respond to the direction of the arrows, and to respond as quickly as you can without making mistakes.

        Press the right button to continue
  Routine finishMessage
    TextComponent finishMessage_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your participation!
      wrapWidth = 1.3
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  Routine task_stimRoutine
    CodeComponent endTask_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if endCondition: # skip all trials for this condition; participant will not play game.
            task_trial_loop.finished = True
            task_block_loop.finished = True
            continueRoutine = False
    CodeComponent task_isi_code
      Code Type = Both
      Begin Experiment:
        #no need to initialize thisISI, as already done in practice code snippit
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1500, 2000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        task_trial_loop.addData('ISI', thisISI)
    ImageComponent task_centerImg
      image [set every repeat] = $middleStim
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent task_rightImg1
      image [set every repeat] = $rightStim1
      pos = (.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent task_rightImg2
      image [set every repeat] = $rightStim2
      pos = (1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent task_leftImg1
      image [set every repeat] = $leftStim1
      pos = (-.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent task_leftImg2
      flipVert = True
      image [set every repeat] = $leftStim1
      pos = (-1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent task_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.71)
      saveStartStop = False
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    CodeComponent task_stimTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if task_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 41: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x29]) #hexcode = 41; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 42:
                stimTriggerSent = True
                port.write([0x2A])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 43:
                stimTriggerSent = True
                port.write([0x2B])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 44:
                stimTriggerSent = True
                port.write([0x2C])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 51: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x33]) #hexcode = 51; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 52:
                stimTriggerSent = True
                port.write([0x34])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 53:
                stimTriggerSent = True
                port.write([0x35])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 54:
                stimTriggerSent = True
                port.write([0x36])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent task_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_respTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if task_stim_keyResp.keys and len(task_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(task_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(task_stim_keyResp.keys) < 2: #if this is  the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(task_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
    CodeComponent task_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if task_stim_keyResp.keys: #if at least one response was made this trial
            if task_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif task_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        elif not task_stim_keyResp.keys: # if no response was made
            accuracy = 0

        # save this trial's accuracy to our output file
        task_trial_loop.addData('accuracy', accuracy)
  Routine prac_stimRoutine
    CodeComponent prac_isi_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the thisISI variable
        thisISI = 0
      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1500, 2000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        prac_trial_loop.addData('ISI', thisISI)


        # show in console for debugging
        #print('thisISI: ', thisISI)
    ImageComponent prac_centerImg
      image [set every repeat] = $middleStim
      size = [.6, .6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent prac_rightImg1
      image [set every repeat] = $rightStim1
      pos = (.71, 0)
      saveStartStop = False
      size = [.6, .6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent prac_rightImg2
      image [set every repeat] = $rightStim2
      pos = (1.42, 0)
      saveStartStop = False
      size = [.6, .6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent prac_leftImg1
      image [set every repeat] = $leftStim1
      pos = (-.71, 0)
      saveStartStop = False
      size = [.6, .6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent prac_leftImg2
      image [set every repeat] = $leftStim1
      pos = (-1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent prac_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.71)
      saveStartStop = False
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    CodeComponent prac_stimTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if prac_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 1: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x01]) #hexcode = 1; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 2:
                stimTriggerSent = True
                port.write([0x02])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 3:
                stimTriggerSent = True
                port.write([0x03])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 4:
                stimTriggerSent = True
                port.write([0x04])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent prac_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent prac_respTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if prac_stim_keyResp.keys and len(prac_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(prac_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial (-1 is the last position)
            if len(prac_stim_keyResp.keys) < 2: #if this is  the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(prac_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
    CodeComponent prac_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if prac_stim_keyResp.keys: #if at least one response was made this trial
            if prac_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif prac_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        elif not prac_stim_keyResp.keys: # if no response was made
            accuracy = 0

        # save this trial's accuracy to our output file
        prac_trial_loop.addData('accuracy', accuracy)
  Routine instructMainTask
    TextComponent instructMainTask_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You will now begin the actual game.

        Experimenter: press key to continue
    KeyboardComponent instructMainTask_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine prac_blockReminders
    CodeComponent prac_initAcc_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc = 0
    TextComponent prac_blockText
      letterHeight = 0.06
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Remember to limit blinking to about once every ten seconds. Try to relax the muscles in your face, neck, and shoulders.

        Respond as quickly as you can without making mistakes. Only respond once each time you see the arrows appear.

        Always respond to the direction of the MIDDLE arrow.

        To get ready, rest your thumbs on the right and left buttons.
    KeyboardComponent prac_reminder_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine task_blockReminders
    CodeComponent task_blockReminder_code
      Code Type = Auto->JS
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      Begin Routine:
        if endCondition: # skip all trials for this condition; participant will not play game.
            task_block_loop.finished = True
            continueRoutine = False

        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 10'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 10'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 10'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 10'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 10'
        elif blockCounter == 6:
            blockNumText = 'Block 6 of 10'
        elif blockCounter == 7:
            blockNumText = 'Block 7 of 10'
        elif blockCounter == 8:
            blockNumText = 'Block 8 of 10'
        elif blockCounter == 9:
            blockNumText = 'Block 9 of 10'
        elif blockCounter == 10:
            blockNumText = 'Block 10 of 10'
    TextComponent task_blockText
      color = $[-0.3,-0.3,-0.3]
      letterHeight = 0.12
      pos = (0, .14)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.8
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    TextComponent task_blockReminders_text
      letterHeight = 0.04
      pos = (0, -.19)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Remember to limit blinking to about once every ten seconds. Try to relax the muscles in your face, neck, and shoulders.

        Respond as quickly as you can without making mistakes. Only respond once each time you see the arrows appear.

        Always respond to the direction of the MIDDLE arrow.

        To get ready, rest your thumbs on the right and left buttons.

        Press the right button to begin.
    KeyboardComponent task_blockReminders_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine task_blockFeed
    CodeComponent endTask_code_3
      Code Type = Auto->JS
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      Begin Routine:
        if endCondition: # skip all trials for this condition; participant will not play game.
            task_block_loop.finished = True
            continueRoutine = False
    CodeComponent task_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockCounter < 10:
            if blockAcc >= .75:
                if blockAcc < .9:
                    blockFeed = 'Good job'
                    blockFeedCat = 1
                elif blockAcc >= .9:
                    blockFeed = 'Respond faster'
                    blockFeedCat = 2
            elif blockAcc < .75:
                blockFeed = 'Respond more accurately'
                blockFeedCat = 3
        elif blockCounter == 10:
            'You have completed all blocks'

        # save this block's feedback to our output file
        task_trial_loop.addData('blockFeedCat', blockFeedCat)

        #reset the following variables to zero before next block starts
        trialNum = 0
        numCorr = 0
    TextComponent task_blockFeed_text
      color = $[-0.3,-0.3,-0.3]
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockFeed
      wrapWidth = 1.8
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    TextComponent task_blackFeed_text3
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Please wait
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    TextComponent task_blockFeed_text2
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 10
      text [set every repeat] = Press the right button to continue
      wrapWidth = 1.3
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    KeyboardComponent task_blockFeed_keyResp
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 10
      store = nothing
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  Routine prac_blockFeed
    CodeComponent prac_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockAcc >= .75: #if accuracy >= 75% then say practice is complete and end practice loop to continue to main exp
            outPut = 'You will now play the real game' #feedback presented
            prac_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc <= .75: #if accuracy < 75% then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again' #feedback presented
            prac_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        #reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
      End Routine:
        if prac_blockFeed_keyResp.keys[-1] == 's':
            prac_block_loop.finished = True #end practice loop to continue to main exp
    TextComponent prac_blockFeed_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experimenter: press key to continue
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp
      allowedKeys = 'c','s'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructRight
    TextComponent instructRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.
    ImageComponent instructRight_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg1
      image = img/rightArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg2
      image = img/rightArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg1
      image = img/rightArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg2
      image = img/rightArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructRight_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconRight
    TextComponent instructInconRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Sometimes the MIDDLE arrow will point in a different direction from the other arrows. However, your goal is to always respond to the MIDDLE arrow.

        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.
    ImageComponent instructIncon_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg1
      image = img/leftArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg2
      image = img/leftArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg1
      image = img/leftArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconRight_leftImg2
      image = img/leftArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructInconRight_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructLeft
    TextComponent instructLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.
    ImageComponent instructLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg1
      image = img/leftArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg2
      image = img/leftArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg1
      image = img/leftArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg2
      image = img/leftArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructLeft_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconLeft
    TextComponent instructInconLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.
    ImageComponent instructInconLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg1
      image = img/rightArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg2
      image = img/rightArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg1
      image = img/rightArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg2
      image = img/rightArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructInconLeft_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        import serial #used for sending eeg triggers
        import time #indirerctly used for sending eeg triggers (how long to wait before clearing port)

        win.mouseVisible = False #hide mouse cursor
        port = serial.Serial('COM4') # Open specified serial port (COM4) for sending eeg triggers to
        PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)
        port.write([0x00]) #clear serial port
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        port.write([0xFF]) #set port values back to default state (FF)
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        port.close() #close port opened at start of exp
  Routine task_condition
    CodeComponent condition_init_blockCounter
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of the condition
        blockCounter = 0
        endCondition = 0
      Begin Routine:
        #reset the following variables at the start of the experiment
        blockCounter = 0

        if conditionText == 'Observe other':
            endCondition = 1 # skip all trials for this condition; participant will not play game.
            if expInfo['skipOther'] == '1': #skip 'observe other' screen
                continueRoutine = False
        elif conditionText == 'Observed':
            endCondition = 0 # participant will play game.
        elif conditionText == 'Alone':
            endCondition = 0 # participant will play game.
    TextComponent condition_whichCondition_text
      color = $[-0.3,-0.3,-0.3]
      letterHeight = 0.22
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $conditionText
      wrapWidth = 1.8
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    TextComponent condition_reminder_text
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experimenter: provide instructions and then press key to continue
      wrapWidth = 1.8
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    KeyboardComponent condition_keyResp
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine task_conditionComplete
    CodeComponent stimTask_code_4
      Code Type = Auto->JS
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      Begin Routine:
        if endCondition: # skip all trials for this condition; participant will not play game.
            continueRoutine = False
    TextComponent conditionComplete_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Please ring bell and wait for experimenter to continue
      wrapWidth = 1.3
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    KeyboardComponent conditionComplete_key_resp
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructRight_2
    TextComponent instructRight_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.

        Press the right button to continue
    ImageComponent instructRight_centerImg_2
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg1_2
      image = img/rightArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg2_2
      image = img/rightArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg1_2
      image = img/rightArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg2_2
      image = img/rightArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructRight_keyResp_2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructLeft_2
    TextComponent instructLeft_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.

        Press the left button to continue
    ImageComponent instructLeft_centerImg_2
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg1_2
      image = img/leftArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg2_2
      image = img/leftArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg1_2
      image = img/leftArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg2_2
      image = img/leftArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructLeft_keyResp_2
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconRight_2
    TextComponent instructInconRight_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Sometimes the MIDDLE arrow will point in a different direction from the other arrows. However, your goal is to always respond to the MIDDLE arrow.

        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.

        Press the right button to continue
    ImageComponent instructIncon_centerImg_2
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg1_2
      image = img/leftArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg2_2
      image = img/leftArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg1_2
      image = img/leftArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconRight_leftImg2_2
      image = img/leftArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructInconRight_keyResp_2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconLeft_2
    TextComponent instructInconLeft_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.

        Press the left button to continue
    ImageComponent instructInconLeft_centerImg_2
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg1_2
      image = img/rightArrow.png
      pos = (.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg2_2
      image = img/rightArrow.png
      pos = (.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg1_2
      image = img/rightArrow.png
      pos = (-.05, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg2_2
      image = img/rightArrow.png
      pos = (-.1, -.3)
      saveStartStop = False
      size = (.04, .04)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructInconLeft_keyResp_2
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prac_blockReminders_2
    TextComponent prac_blockText_2
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Remember to limit blinking to about once every ten seconds. Try to relax the muscles in your face, neck, and shoulders.

        Respond as quickly as you can without making mistakes. Only respond once each time you see the arrows appear.

        Always respond to the direction of the MIDDLE arrow.

        To get ready, rest your thumbs on the right and left buttons.

        Press the right button to begin.
    KeyboardComponent prac_reminder_keyResp_2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine oberve_other
    CodeComponent observe_other_code
      Code Type = Auto->JS
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      Begin Routine:
        if conditionText == 'Observe other':
            task_trial_loop.finished = True
            task_block_loop.finished = True
  Routine logo
    ImageComponent logo_image
      image = img/logo2.png
      size = (1.2,.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent logo_resp
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine respond_onceInstruct
    TextComponent respond_once_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Each time you see the arrows appear, respond as quickly as you can without making mistakes.

        However, only respond once each time you see the arrows appear. Even if you think you made the wrong response, do not respond again until you see the next set of arrows appear.

        Experimenter: demonstrate how to respond
    KeyboardComponent respond_once_key_resp1
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine respond_onceInstruct_2
    TextComponent respond_once_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Each time you see the arrows appear, respond as quickly as you can without making mistakes.

        However, only respond once each time you see the arrows appear. Even if you think you made the wrong response, do not respond again until you see the next set of arrows appear.

        Press the right button to continue
    KeyboardComponent respond_once_key_resp1_2
      allowedKeys = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prac_initFixation
    ImageComponent initFixation_img_2
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.71)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
      units = deg
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  Routine task_initFixation
    CodeComponent endTask_code
      Code Type = Auto->JS
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      Begin Routine:
        if endCondition: # skip all trials for this condition; participant will not play game.
            task_block_loop.finished = True
            continueRoutine = False
    ImageComponent initFixation_img
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.71)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
      units = deg
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  Routine eeg_trigger_check
    CodeComponent triggerCheck_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize usb connected variable
        usbConnected = 1
      Begin Routine:
        #(re)open trigger port. This is done in case the connection failed,
        #in which case triggers will no longer be sent until the port is reopened.

        #At start of routine, we try to close/open the port. This will usually be
        #succesful, causing us to end the routine altogether. However, it will fail if
        #the usb is unplugged. In this latter case, the routine will then run code each
        #frame to constantly check for the usb being plugged back in, before continuing.

        try:
        #if usb connected, port will close/open and routine will end
            port.close()
            port.open()
            usbConnected = 1 #if successful, set usbConnectd to 1
            continueRoutine = False #if successful, end the routine

        except: #if port close/open fails, then set usbConnected to 0. Routine will loop each frame until fixed.
            usbConnected = 0 #if failure, set usbConnected to 0
      Each Frame:
        #if the usb is not connected, then keep trying to open port to determine when it has been reconnected.
        if usbConnected == 0:

            try:
                #if usb connected, port will close/open and routine will end
                port.close()
                port.open()
                usbConnected = 1 #if successful, set usbConnectd to 1
                #send trigger to indicate that there was a connection issue that is now resolved
                port.write([0x63]) #hexcode = 99; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
                #if successful, end the routine
                continueRoutine = False

            except: #if usb not connected, routine will continue (keep checking port and keep showing message)
                usbConnected = 0 #if failure, set usbConnectd to 0
                time.sleep(0.5) #wait .5 secs before checking again, to not overload the system
    TextComponent triggerIssue_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = EEG EQUIPMENT ISSUE: please ring bell for experimenter
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  Routine instructRightSingle
    KeyboardComponent instructRightSingle_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $instructRightSingle_keyResp.keys
      store = nothing
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    KeyboardComponent instructRightSingle_keyResp_2
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [condition] = $instructRightSingle_keyResp.keys
      stopVal [condition] = $instructRightSingle_keyResp_2.keys
      store = nothing
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    KeyboardComponent instructRightSingle_keyResp_3
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [condition] = $instructRightSingle_keyResp_2.keys
      stopVal [condition] = $instructRightSingle_keyResp_3.keys
      store = nothing
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    KeyboardComponent instructRightSingle_keyResp_4
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [condition] = $instructRightSingle_keyResp_3.keys
      stopVal [condition] = $instructRightSingle_keyResp_4.keys
      store = nothing
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    KeyboardComponent instructRightSingle_keyResp_5
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $instructRightSingle_keyResp_4.keys
      stopVal [condition] = $instructRightSingle_keyResp_5.keys
      store = nothing
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    TextComponent instructRightSingle_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the RIGHT.
    TextComponent instructRightSingle_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = $instructRightSingle_keyResp.keys
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the RIGHT.

        You can tell this arrow is pointing to the RIGHT by looking at which side the point is on.
    TextComponent instructRightSingle_text_3
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = $instructRightSingle_keyResp_2.keys
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the RIGHT.

        You can tell this arrow is pointing to the RIGHT by looking at which side the point is on.

        The point is on the RIGHT, so the arrow is pointing this way.
    TextComponent instructRightSingle_text_4
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = $instructRightSingle_keyResp_3.keys
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the RIGHT.

        You can tell this arrow is pointing to the RIGHT by looking at which side the point is on.

        The point is on the RIGHT, so the arrow is pointing this way.

        You would respond to this arrow by pressing the RIGHT button with your RIGHT hand.
    TextComponent instructRightSingle_text_5
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = $instructRightSingle_keyResp_4.keys
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the RIGHT.

        You can tell this arrow is pointing to the RIGHT by looking at which side the point is on.

        The point is on the RIGHT, so the arrow is pointing this way.

        You would respond to this arrow by pressing the RIGHT button with your RIGHT hand.

        Press the RIGHT button to continue.
    ImageComponent instructRightSingle_rightArrow
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.08, .08)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRightSingle_rightArrowHighlight
      image = img/rightArrowHighlight.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.08, .08)
      startVal [condition] = $instructRightSingle_keyResp.keys
      texture resolution = 512
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    ImageComponent instructRightSingle_rightArrowSolid
      image = img/rightArrowSolid.png
      pos = (0, -.4)
      saveStartStop = False
      size = (.08, .08)
      startVal [condition] = $instructRightSingle_keyResp_2.keys
      texture resolution = 512
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  Routine instructMiddle
    KeyboardComponent instructMiddle_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $instructMiddle_keyResp.keys
      store = nothing
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    KeyboardComponent instructMiddle_keyResp2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $instructMiddle_keyResp.keys
      store = nothing
      syncScreenRefresh = False
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    TextComponent welcome_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.3
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      text [set every repeat]:
        During the game, five arrows will appear at a time. They will be quickly flashed on the screen. Your goal is to respond to the MIDDLE arrow, and to respond as quickly as you can without making mistakes.

        If the MIDDLE arrow is pointing to the right, use your right hand to press the right button. If the MIDDLE arrow is pointing to the left, use your left hand to press the left button.
    TextComponent welcome_text2_2
      letterHeight = 0.04
      startVal [condition] = $instructMiddle_keyResp.keys
      wrapWidth = 1.3
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      text [set every repeat]:
        During the game, five arrows will appear at a time. They will be quickly flashed on the screen. Your goal is to respond to the MIDDLE arrow, and to respond as quickly as you can without making mistakes.

        If the MIDDLE arrow is pointing to the right, use your right hand to press the right button. If the MIDDLE arrow is pointing to the left, use your left hand to press the left button.

        Press the right button to continue
  Routine instructLeftSingle
    KeyboardComponent instructLeftSingle_keyResp
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $instructLeftSingle_keyResp.keys
      store = nothing
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    KeyboardComponent instructLeftSingle_keyResp_2
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [condition] = $instructLeftSingle_keyResp.keys
      stopVal [condition] = $instructLeftSingle_keyResp_2.keys
      store = nothing
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    KeyboardComponent instructLeftSingle_keyResp_3
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [condition] = $instructLeftSingle_keyResp_2.keys
      stopVal [condition] = $instructLeftSingle_keyResp_3.keys
      store = nothing
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    KeyboardComponent instructLeftSingle_keyResp_4
      allowedKeys [set every repeat] = 'c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [condition] = $instructLeftSingle_keyResp_3.keys
      stopVal [condition] = $instructLeftSingle_keyResp_4.keys
      store = nothing
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    KeyboardComponent instructLeftSingle_keyResp_5
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $instructLeftSingle_keyResp_4.keys
      stopVal [condition] = $instructLeftSingle_keyResp_5.keys
      store = nothing
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    TextComponent instructLeftSingle_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the LEFT.
    TextComponent instructLeftSingle_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = $instructLeftSingle_keyResp.keys
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the LEFT.

        You can tell this arrow is pointing to the LEFT by looking at which side the point is on.
    TextComponent instructLeftSingle_text_3
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = $instructLeftSingle_keyResp_2.keys
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the LEFT.

        You can tell this arrow is pointing to the LEFT by looking at which side the point is on.

        The point is on the LEFT, so the arrow is pointing this way.
    TextComponent instructLeftSingle_text_4
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = $instructLeftSingle_keyResp_3.keys
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the LEFT.

        You can tell this arrow is pointing to the LEFT by looking at which side the point is on.

        The point is on the LEFT, so the arrow is pointing this way.

        You would respond to this arrow by pressing the LEFT button with your LEFT hand.
    TextComponent instructLeftSingle_text_5
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = $instructLeftSingle_keyResp_4.keys
      wrapWidth = 1.3
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      text:
        This arrow is pointing to the LEFT.

        You can tell this arrow is pointing to the LEFT by looking at which side the point is on.

        The point is on the LEFT, so the arrow is pointing this way.

        You would respond to this arrow by pressing the LEFT button with your LEFT hand.

        Press the LEFT button to continue.
    ImageComponent instructLeftSingle_leftArrow
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.08, .08)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeftSingle_leftArrowHighlight
      image = img/leftArrowHighlight.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.08, .08)
      startVal [condition] = $instructLeftSingle_keyResp.keys
      texture resolution = 512
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    ImageComponent instructLeftSingle_leftArrowSolid
      image = img/leftArrowSolid.png
      pos = (0, -.4)
      saveStartStop = False
      size = (.08, .08)
      startVal [condition] = $instructLeftSingle_keyResp_2.keys
      texture resolution = 512
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Flow
  Routine JS_code
  Routine setup
  Routine logo
  Routine welcome
  Routine instructRightSingle
  Routine instructLeftSingle
  Routine instructMiddle
  Routine instructRight
  Routine instructRight_2
  Routine instructLeft
  Routine instructLeft_2
  Routine instructInconRight
  Routine instructInconRight_2
  Routine instructInconLeft
  Routine instructInconLeft_2
  Routine respond_onceInstruct
  LoopInitiator prac_block_loop loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine eeg_trigger_check
    Routine prac_blockReminders
    Routine prac_blockReminders_2
    Routine prac_initFixation
    LoopInitiator prac_trial_loop loopType="TrialHandler"
      conditionsFile = prac_trials.xlsx
      loopType = fullRandom
      nReps = 10
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      conditions:
        [{'middleStim': 'img/rightArrow.png', 'rightStim1': 'img/rightArrow.png', 'rightStim2': 'img/rightArrow.png', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 1, 'congruent': 1, 'target': 'right'},
        {'middleStim': 'img/leftArrow.png', 'rightStim1': 'img/leftArrow.png', 'rightStim2': 'img/leftArrow.png', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 2, 'congruent': 1, 'target': 'left'},
        {'middleStim': 'img/rightArrow.png', 'rightStim1': 'img/leftArrow.png', 'rightStim2': 'img/leftArrow.png', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 3, 'congruent': 0, 'target': 'right'},
        {'middleStim': 'img/leftArrow.png', 'rightStim1': 'img/rightArrow.png', 'rightStim2': 'img/rightArrow.png', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 4, 'congruent': 0, 'target': 'left'},
        {'middleStim': 'img/rightArrow.png', 'rightStim1': 'img/rightArrow.png', 'rightStim2': 'img/rightArrow.png', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 1, 'congruent': 1, 'target': 'right'},
        {'middleStim': 'img/leftArrow.png', 'rightStim1': 'img/leftArrow.png', 'rightStim2': 'img/leftArrow.png', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 2, 'congruent': 1, 'target': 'left'}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
      Routine prac_stimRoutine
    LoopTerminator prac_trial_loop
    Routine prac_blockFeed
  LoopTerminator prac_block_loop
  LoopInitiator task_condition_loop loopType="TrialHandler"
    conditionsFile = $"condition_"+expInfo['counterbalance']+".xlsx"
    loopType = sequential
    nReps = 1
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    Routine task_condition
    LoopInitiator task_block_loop loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine eeg_trigger_check
      Routine task_blockReminders
      Routine task_initFixation
      LoopInitiator task_trial_loop loopType="TrialHandler"
        conditionsFile = $whichCondition
        loopType = fullRandom
        nReps = 10
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        Routine task_stimRoutine
      LoopTerminator task_trial_loop
      Routine task_blockFeed
    LoopTerminator task_block_loop
    Routine task_conditionComplete
  LoopTerminator task_condition_loop
