PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s_%s_s%s_r%s_e1' % (expInfo['id'], expName, expInfo['session'], expInfo['run'], )
  Experiment info = {'id': '', 'session': '1', 'run': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = timestamp-v0
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent stim_code
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        #note that we do not send seperate triggers for image/sound, instead, a trigger is sent for
        #the image onset, and then a seperate trigger is initiated by the stimTrak hardware upon
        #recieving the actual audio signal.
        if image.status == STARTED and not stimTriggerSent:
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                # Kia: edited the code to send trigger S88 instead of S1.
                port.write([0x58]) #hexcode = 88; eeg trigger sent
                #Kia: end
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
    ImageComponent image
      image = stimuli\x-image.png
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1
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    SoundComponent sound1
      hamming = False
      saveStartStop = False
      sound = stimuli\sine-200z-1s_100ms-fade.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      volume = 75
  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        import serial #used for sending eeg triggers
        import time #indirerctly used for sending eeg triggers (how long to wait before clearing port)

        win.mouseVisible = False #hide mouse cursor
        port = serial.Serial('COM4') #open specified port (COM3) for sending eeg triggers to
        PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)

        port.write([0x00]) #clear serial port
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        port.write([0xFF]) #set port values back to default state (FF)
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        port.close() #close port opened at start of exp
Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5000
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    Routine trial
  LoopTerminator trials
